PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  expName = color_mood_perception_experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial_2
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    PolygonComponent bgRect
      fillColor [set every repeat] = $color_hex
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent wordStim
      color = Black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    SliderComponent ratingSlider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = ['1','2','3','4','5','6','7']
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine thanks
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
          Thank you for participating!
           Press SPACE to finish.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study.
        In this task, you will see several words displayed on the screen.
        Your job is to rate how emotionally positive or negative each word feels to you.

        Use the slider to indicate your rating.
        There are no right or wrong answers

         Please respond based on your personal feelings.

        Press the spacebar to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = color_mood_conditions.csv
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('word', 'joy'), ('color_hex', '#FF0000')]),
      OrderedDict([('word', 'joy'), ('color_hex', '#0000FF')]),
      OrderedDict([('word', 'joy'), ('color_hex', '#00AA00')]),
      OrderedDict([('word', 'joy'), ('color_hex', '#FFFF00')]),
      OrderedDict([('word', 'content'), ('color_hex', '#FF0000')]),
      OrderedDict([('word', 'content'), ('color_hex', '#0000FF')]),
      OrderedDict([('word', 'content'), ('color_hex', '#00AA00')]),
      OrderedDict([('word', 'content'), ('color_hex', '#FFFF00')]),
      OrderedDict([('word', 'anger'), ('color_hex', '#FF0000')]),
      OrderedDict([('word', 'anger'), ('color_hex', '#0000FF')]),
      OrderedDict([('word', 'anger'), ('color_hex', '#00AA00')]),
      OrderedDict([('word', 'anger'), ('color_hex', '#FFFF00')]),
      OrderedDict([('word', 'fear'), ('color_hex', '#FF0000')]),
      OrderedDict([('word', 'fear'), ('color_hex', '#0000FF')]),
      OrderedDict([('word', 'fear'), ('color_hex', '#00AA00')]),
      OrderedDict([('word', 'fear'), ('color_hex', '#FFFF00')]),
      OrderedDict([('word', 'sadness'), ('color_hex', '#FF0000')]),
      OrderedDict([('word', 'sadness'), ('color_hex', '#0000FF')]),
      OrderedDict([('word', 'sadness'), ('color_hex', '#00AA00')]),
      OrderedDict([('word', 'sadness'), ('color_hex', '#FFFF00')]),
      OrderedDict([('word', 'disgust'), ('color_hex', '#FF0000')]),
      OrderedDict([('word', 'disgust'), ('color_hex', '#0000FF')]),
      OrderedDict([('word', 'disgust'), ('color_hex', '#00AA00')]),
      OrderedDict([('word', 'disgust'), ('color_hex', '#FFFF00')]),
      OrderedDict([('word', 'surprise'), ('color_hex', '#FF0000')])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
    Routine trial_2
  LoopTerminator trials
  Routine thanks
