PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  expName = priming
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None,None)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study_word', 'book')]),
      OrderedDict([('study_word', 'cushion')]),
      OrderedDict([('study_word', 'phone')]),
      OrderedDict([('study_word', 'marble')]),
      OrderedDict([('study_word', 'board')]),
      OrderedDict([('study_word', 'Laptop')]),
      OrderedDict([('study_word', 'Chart')]),
      OrderedDict([('study_word', 'T-shirt')]),
      OrderedDict([('study_word', 'mouse')]),
      OrderedDict([('study_word', 'pastry')]),
      OrderedDict([('study_word', 'case')]),
      OrderedDict([('study_word', 'cruise')]),
      OrderedDict([('study_word', 'police')]),
      OrderedDict([('study_word', 'Keys')]),
      OrderedDict([('study_word', 'Poster')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_word', 'l_pt_p'), ('Reference', 'Laptop'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ha_t'), ('Reference', 'Chart'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'T_hi_t'), ('Reference', 'Tshirt'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ou_se'), ('Reference', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_as_tr_'), ('Reference', 'pastry'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_'), ('Reference', 'Case'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ru_is_'), ('Reference', 'Cruise'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_li_e'), ('Reference', 'Police'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'k_y_'), ('Reference', 'keys'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'p_st_r'), ('Reference', 'Poster'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_o_rd'), ('Reference', 'Board'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_a_bl_'), ('Reference', 'Marble'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ho_e'), ('Reference', 'Phone'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_oo_'), ('Reference', 'Book'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_io_'), ('Reference', 'Cushion'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'ta_l_'), ('Reference', 'Table'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'p_nc_l'), ('Reference', 'Pencil'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'v_s_'), ('Reference', 'Vase'), ('old_new', 'new')])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
    Routine test
  LoopTerminator trials_2
