PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine inst
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome
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  Routine Thank_you_
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you
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Flow
  Routine inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cuond.xlsx
    loopType = random
    nReps = 25
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    conditions:
      [{'word': 'Red', 'colour': 'red', 'stimu_condition': 'c', 'correct_resp': 'r'},
      {'word': 'Red', 'colour': 'blue', 'stimu_condition': 'I', 'correct_resp': 'b'},
      {'word': 'Blue', 'colour': 'red', 'stimu_condition': 'I', 'correct_resp': 'r'},
      {'word': 'Blue', 'colour': 'blue', 'stimu_condition': 'c', 'correct_resp': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine Thank_you_
